{
    "DH": {
        "links": [
            {
                "convention": "modified",
                "alpha":  -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset":  1.5708
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708
            },
            {
                "convention": "modified",
                "alpha":  1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "prismatic",
                "mode": "active",
                "offset": -0.4318
            },
            {
                "convention": "modified",
                "alpha":  0.0000, "A":  0.0000, "theta":  0.0000, "D":  0.4162,
                "type": "revolute",
                "mode": "active",
                "offset":  0.0000
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0000, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708
            },
            {
                "convention": "modified",
                "alpha": -1.5708, "A":  0.0091, "theta":  0.0000, "D":  0.0000,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708
            }
        ]
    }
    ,
    "tooltip-offset" : [[ 0.0, -1.0,  0.0,  0.0],
                        [ 0.0,  0.0,  1.0,  0.01],
                        [-1.0,  0.0,  0.0,  0.0],
                        [ 0.0,  0.0,  0.0,  1.0]]
    ,
    "coupling" : {
        "ActuatorToJointPosition" : [[ 1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  1.0000,  0.0000,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000, -1.5632,  0.0000,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  1.0186,  0.0000,  0.0000],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000, -0.8306,  0.6089,  0.6089],
                                     [ 0.0000,  0.0000,  0.0000,  0.0000,  0.0000, -1.2177,  1.2177]]
    }
    ,
    "tool-engage-position" : {
        "lower" : [0.0, 0.0, 0.0, -270.0, -15.0,  15.0, 0.0],
        "upper" : [0.0, 0.0, 0.0,  270.0,  15.0, -15.0, 0.0]
    }
    ,
    "tool-joint-limit" : {
        "lower" : [ -91.0, -53.0,   0.0, -260.0, -80.0, -80.0, -20.0],
        "upper" : [  91.0,  53.0, 240.0,  260.0,  80.0,  80.0,  80.0]
    }
    ,
    "tool-torque-limit" : {
        "lower" : [ -4.97, -4.97, -14.81 , -0.33, -0.25, -0.20, -0.16],
        "upper" : [  4.97,  4.97,  14.81,   0.33,  0.25,  0.20,  0.16]
    }
}
